OpenViBE-Scenario
Comment
  Connect the Sinus Oscillator Box to the temporal filter if you want to test without a device conneted to the Acquisition Client.
Comment
  Alpha
  Filtering in the [7-13Hz] frequency band.
Comment
  Accumulating the signal with epochs
  (1 second) every 0.1 seconds.
Comment
  Squaring (x*x) the signal.
Comment
  Averageing the squared  (x*x) the signal.
Comment
  Averageing last 4 epochs.

Acquisition client => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
#0.Signal stream -> Temporal filter: Alpha => #1
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 7
  High cut frequency (Hz) = 13
  Pass band ripple (dB) = 0.5
-> Time based epoching
  Epoch 1 duration (in sec) = 1.000000
  Epoch 1 intervals (in sec) = 0.100000
-> Simple DSP
  Equation = x*x
-> Signal average
-> Epoch average => #5
  Averaging type = Moving epoch average
  Epoch count = 4
-> Simple DSP
  Equation = x+x
-> Power 4 Game
  OSC Server IP = 127.0.0.1
  OSC Server Port = 12003
  OSC Address = /power4game
Data=#5 -> Signal display "Alpha Power"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 100
  Bottom ruler = true
  Left ruler = false
  Multiview = false
#5 -> Matrix Display "Alpha Power"
  Color gradient = 0:2,36,58; 50:100,100,100; 100:83,17,20
  Steps = 100
  Symetric min/max = false
  Real time min/max = false
#5 -> Power 4 Callibration
  OSC Server IP = 127.0.0.1
  OSC Server Port = 12003
  OSC Address = /power4calibration
Data=#1 -> Signal display "Alpha Signal"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 100
  Bottom ruler = true
  Left ruler = false
  Multiview = false
Data=#0.Signal stream -> Signal display "Raw Signal"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 100
  Bottom ruler = true
  Left ruler = false
  Multiview = false

Sinus oscillator
  Channel count = 1
  Sampling frequency = 512
  Generated epoch sample count = 32
